opentrons/protocol-designer 8.4.2
schemaVersion: 8
protocolName: Gradient96well
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p20_single_gen2: {mount: left}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 20 µL (1): {loadName: opentrons_96_tiprack_20ul, namespace: opentrons, version: 1, location: 4}
  Opentrons 6 Tube Rack with Falcon 50 mL Conical: {loadName: opentrons_6_tuberack_falcon_50ml_conical, namespace: opentrons, version: 1, location: 5}
  SMR Lab 96 Well Plate 5uL: {loadName: smrlab_96_wellplate_5ul, namespace: custom_beta, version: 1, location: 6}
pipetteTiprackAssignments:
  p20_single_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
ingredients:
  - MWCNT_Solution
ingredLocations:
  Opentrons 6 Tube Rack with Falcon 50 mL Conical:
    MWCNT_Solution {volume: 24000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 50
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 110
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A1-H1, A2-H2
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 0.1
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_flowRate: 3.78
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 50
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 110
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A3-H3, A4-H4
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 0.1
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_flowRate: 3.78
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 3
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 50
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 110
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A5-H5, A6-H6
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 0.1
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_flowRate: 3.78
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 4
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 50
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 110
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A7-H7, A8-H8
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 0.1
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_flowRate: 3.78
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 50
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 110
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A9-H9, A10-H10
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 0.1
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_flowRate: 3.78
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 6
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 50
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 110
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A11-H11, A12-H12
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 0.1
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_flowRate: 3.78
  dropTip_location: trashBin
  preWetTip: true
labwareDefinitions:
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  custom_beta/smrlab_96_wellplate_5ul/1:
    brand: {brand: SMR Lab, brandId: [5]}
    metadata: {displayName: SMR Lab 96 Well Plate 5uL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 1.65}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: smrlab_96_wellplate_5ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 0.5, totalLiquidVolume: 7, shape: circular, diameter: 2.8, x: 14.38, y: 74.24, z: 1.15}
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 20 µL (1), wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 17, labwareId: Opentrons 6 Tube Rack with Falcon 50 mL Conical, wellName: A1, wellLocation: {origin: bottom, offset: {z: 50, x: 0, y: 0}}, flowRate: 3.7}
- touchTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 6 Tube Rack with Falcon 50 mL Conical, wellName: A1, wellLocation: {origin: bottom, offset: {z: 110}}}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: SMR Lab 96 Well Plate 5uL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: SMR Lab 96 Well Plate 5uL, wellName: B1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: SMR Lab 96 Well Plate 5uL, wellName: C1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 3.7}
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