opentrons/protocol-designer 8.3.0
schemaVersion: 8
protocolName: MWCNT_5uL_SingleChannel_2
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p50_single: {mount: right}
labwareLocationUpdate:
  NEST 12 Well Reservoir 15 mL: {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 5}
  SMR Lab 96 Well Plate 5uL: {loadName: smrlab_96_wellplate_5ul, namespace: custom_beta, version: 1, location: 6}
  Opentrons OT-2 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 4}
pipetteTiprackAssignments:
  p50_single: [opentrons/opentrons_96_tiprack_300ul/1]
ingredients:
  - MWCNT_Solution
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    MWCNT_Solution {volume: 7500}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 5
  path: single
  changeTip: perDest
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 25
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_flowRate: 50
  blowout_checkbox: true
  blowout_flowRate: 1000
  blowout_location: trashBin
  dropTip_location: trashBin
  preWetTip: true
labwareDefinitions:
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  custom_beta/smrlab_96_wellplate_5ul/1:
    brand: {brand: SMR Lab, brandId: [5]}
    metadata: {displayName: SMR Lab 96 Well Plate 5uL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 1.65}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: smrlab_96_wellplate_5ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 0.5, totalLiquidVolume: 7, shape: circular, diameter: 2.8, x: 14.38, y: 74.24, z: 1.15}
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commands:
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- pickUpTip: {pipetteId: p50_single, labwareId: Opentrons OT-2 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p50_single, volume: 5, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 25}
- dispense: {pipetteId: p50_single, volume: 5, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 50}
- aspirate: {pipetteId: p50_single, volume: 5, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 25}
- aspirate: {meta: {isAirGap: true}, pipetteId: p50_single, volume: 5, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 27.85, x: 0, y: 0}}, flowRate: 25}
- dispense: {meta: {isAirGap: true}, pipetteId: p50_single, volume: 5, labwareId: SMR Lab 96 Well Plate 5uL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1.5, x: 0, y: 0}}, flowRate: 50}
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