opentrons/protocol-designer 8.2.3
schemaVersion: 8
protocolName: MWCNT_Characterization
author: Patrick
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p50_multi: {mount: left}
labwareLocationUpdate:
  NEST 12 Well Reservoir 15 mL: {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 5}
  Opentrons OT-2 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 4}
  SMR Lab 96 Well Plate 5uL: {loadName: smrlab_96_wellplate_5ul, namespace: custom_beta, version: 1, location: 6}
pipetteTiprackAssignments:
  p50_multi: [opentrons/opentrons_96_tiprack_300ul/1]
ingredients:
  - MWCNT_Solution
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    MWCNT_Solution {volume: 7500}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  aspirate_flowRate: 25
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A1-A12
  dispense_flowRate: 50
  blowout_checkbox: true
  blowout_flowRate: 1000
  blowout_location: source_well
  dropTip_location: trashBin
  preWetTip: true
labwareDefinitions:
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  custom_beta/smrlab_96_wellplate_5ul/1:
    brand: {brand: SMR Lab, brandId: [5]}
    metadata: {displayName: SMR Lab 96 Well Plate 5uL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 1.65}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: smrlab_96_wellplate_5ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 0.5, totalLiquidVolume: 7, shape: circular, diameter: 2.8, x: 14.38, y: 74.24, z: 1.15}
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commands:
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- pickUpTip: {pipetteId: p50_multi, labwareId: Opentrons OT-2 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p50_multi, volume: 5, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 25}
- dispense: {pipetteId: p50_multi, volume: 5, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 50}
- aspirate: {pipetteId: p50_multi, volume: 5, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 25}
- dispense: {pipetteId: p50_multi, volume: 5, labwareId: SMR Lab 96 Well Plate 5uL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 50}
- blowout: {pipetteId: p50_multi, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, flowRate: 1000, wellLocation: {origin: top, offset: {z: 0}}}
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