opentrons/protocol-designer 8.2.2
schemaVersion: 8
protocolName: MWCNT Volume Characterization
description: Deposits MWCNT solution from left to right starting with 5uL and ending with 30 uL
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p50_multi: {mount: left}
  p50_single: {mount: right}
labwareLocationUpdate:
  SMR Lab 96 Well Plate 5uL: {loadName: smrlab_96_wellplate_5ul, namespace: custom_beta, version: 1, location: 6}
  NEST 12 Well Reservoir 15 mL (slot 5): {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 5}
  Opentrons OT-2 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 4}
  NEST 12 Well Reservoir 15 mL (slot 10): {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 10}
pipetteTiprackAssignments:
  p50_multi: [opentrons/opentrons_96_tiprack_300ul/1]
  p50_single: [opentrons/opentrons_96_tiprack_300ul/1]
ingredients:
  - Blue Dye
  - MWCNT Solution
ingredLocations:
  NEST 12 Well Reservoir 15 mL (slot 5):
    MWCNT Solution {volume: 7500}: A1
  NEST 12 Well Reservoir 15 mL (slot 10):
    Blue Dye {volume: 7500}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL (slot 5)
  aspirate_wells: A1
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  aspirate_flowRate: 25
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A1
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: NEST 12 Well Reservoir 15 mL (slot 5)
  aspirate_wells: A1
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  aspirate_flowRate: 25
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A2
  dispense_flowRate: 50
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 15
  path: single
  changeTip: never
  aspirate_labware: NEST 12 Well Reservoir 15 mL (slot 5)
  aspirate_wells: A1
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  aspirate_flowRate: 25
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A3
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: NEST 12 Well Reservoir 15 mL (slot 5)
  aspirate_wells: A1
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  aspirate_flowRate: 25
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A4
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 25
  path: single
  changeTip: never
  aspirate_labware: NEST 12 Well Reservoir 15 mL (slot 5)
  aspirate_wells: A1
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  aspirate_flowRate: 25
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: NEST 12 Well Reservoir 15 mL (slot 5)
  aspirate_wells: A1
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  aspirate_flowRate: 25
  dispense_labware: SMR Lab 96 Well Plate 5uL
  dispense_wells: A6
  dropTip_location: trashBin
  preWetTip: true
labwareDefinitions:
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  custom_beta/smrlab_96_wellplate_5ul/1:
    brand: {brand: SMR Lab, brandId: [5]}
    metadata: {displayName: SMR Lab 96 Well Plate 5uL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 1.65}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: smrlab_96_wellplate_5ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 0.5, totalLiquidVolume: 7, shape: circular, diameter: 2.8, x: 14.38, y: 74.24, z: 1.15}
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commands:
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- pickUpTip: {pipetteId: p50_multi, labwareId: Opentrons OT-2 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p50_multi, volume: 5, labwareId: NEST 12 Well Reservoir 15 mL (slot 5), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 25}
- dispense: {pipetteId: p50_multi, volume: 5, labwareId: NEST 12 Well Reservoir 15 mL (slot 5), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 50}
- aspirate: {pipetteId: p50_multi, volume: 5, labwareId: NEST 12 Well Reservoir 15 mL (slot 5), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 25}
- dispense: {pipetteId: p50_multi, volume: 5, labwareId: SMR Lab 96 Well Plate 5uL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 50}
- aspirate: {pipetteId: p50_multi, volume: 10, labwareId: NEST 12 Well Reservoir 15 mL (slot 5), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 25}
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