opentrons/protocol-designer 8.2.1
schemaVersion: 8
protocolName: Volume_Calibration
author: Patrick & Andrea
description: Setup to check dispensing volume
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p50_multi: {mount: left}
  p50_single: {mount: right}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 4}
  NEST 12 Well Reservoir 15 mL (slot 5): {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 5}
  NEST 12 Well Reservoir 15 mL (slot 6): {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 6}
pipetteTiprackAssignments:
  p50_multi: [opentrons/opentrons_96_tiprack_300ul/1]
  p50_single: [opentrons/opentrons_96_tiprack_300ul/1]
ingredients:
  - Water
ingredLocations:
  NEST 12 Well Reservoir 15 mL (slot 5):
    Water {volume: 5000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: NEST 12 Well Reservoir 15 mL (slot 5)
  aspirate_wells: A1
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  aspirate_flowRate: 25
  dispense_labware: NEST 12 Well Reservoir 15 mL (slot 6)
  dispense_wells: A1
  dispense_flowRate: 50
  dropTip_location: trashBin
  preWetTip: true
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p50_single, labwareId: Opentrons OT-2 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p50_single, volume: 50, labwareId: NEST 12 Well Reservoir 15 mL (slot 5), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 25}
- dispense: {pipetteId: p50_single, volume: 50, labwareId: NEST 12 Well Reservoir 15 mL (slot 5), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 50}
- aspirate: {pipetteId: p50_single, volume: 50, labwareId: NEST 12 Well Reservoir 15 mL (slot 5), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 25}
- dispense: {pipetteId: p50_single, volume: 50, labwareId: NEST 12 Well Reservoir 15 mL (slot 6), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 50}
- moveToAddressableAreaForDropTip: {pipetteId: p50_single, addressableAreaName: fixedTrash, offset: {x: 0, y: 0, z: 0}, alternateDropLocation: true}
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