opentrons/protocol-designer 8.4.3
schemaVersion: 8
protocolName: newest24gradient1ul
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p20_single_gen2: {mount: left}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 20 µL (1): {loadName: opentrons_96_tiprack_20ul, namespace: opentrons, version: 1, location: 4}
  Opentrons 6 Tube Rack with Falcon 50 mL Conical: {loadName: opentrons_6_tuberack_falcon_50ml_conical, namespace: opentrons, version: 1, location: 5}
  Newest24gradientplate 24 Well Plate 6 µL: {loadName: newest24gradientplate_24_wellplate_6ul, namespace: custom_beta, version: 1, location: 6}
pipetteTiprackAssignments:
  p20_single_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
ingredients:
  - MWCNT_Solution
ingredLocations:
  Opentrons 6 Tube Rack with Falcon 50 mL Conical:
    MWCNT_Solution {volume: 20000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 40
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 110
  dispense_labware: Newest24gradientplate 24 Well Plate 6 µL
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 0.1
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_flowRate: 3.78
  dropTip_location: trashBin
labwareDefinitions:
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  custom_beta/newest24gradientplate_24_wellplate_6ul/1:
    brand: {brand: newest24gradientplate, brandId: []}
    metadata: {displayName: Newest24gradientplate 24 Well Plate 6 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 1.88}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: newest24gradientplate_24_wellplate_6ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 0.1, totalLiquidVolume: 6, shape: circular, diameter: 2.87, x: 19.81, y: 70.59, z: 1.78}
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 20 µL (1), wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: Opentrons 6 Tube Rack with Falcon 50 mL Conical, wellName: A1, wellLocation: {origin: bottom, offset: {z: 40, x: 0, y: 0}}, flowRate: 3.7}
- touchTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 6 Tube Rack with Falcon 50 mL Conical, wellName: A1, wellLocation: {origin: bottom, offset: {z: 110}}}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: Newest24gradientplate 24 Well Plate 6 µL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: Newest24gradientplate 24 Well Plate 6 µL, wellName: B1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: Newest24gradientplate 24 Well Plate 6 µL, wellName: C1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 3.7}
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