opentrons/protocol-designer 8.3.0
schemaVersion: 8
protocolName: MWNCT_24plates_5ul
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p50_single: {mount: right}
labwareLocationUpdate:
  Opentrons 6 Tube Rack with Falcon 50 mL Conical: {loadName: opentrons_6_tuberack_falcon_50ml_conical, namespace: opentrons, version: 1, location: 5}
  SMRLabs 24 Well Plate 20 µL: {loadName: smrlabs_24_wellplate_20ul, namespace: custom_beta, version: 1, location: 6}
pipetteTiprackAssignments:
  p50_single: [opentrons/opentrons_96_tiprack_300ul/1]
ingredients:
  - MWCNT_Solution
ingredLocations:
  Opentrons 6 Tube Rack with Falcon 50 mL Conical:
    MWCNT_Solution {volume: 40000}: A3
savedStepForms:
- stepType: moveLiquid
  stepName: Transfer
  pipette: p50_single
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 25
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 112
  dispense_labware: SMRLabs 24 Well Plate 20 µL
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_flowRate: 50
  disposalVolume_checkbox: true
  disposalVolume_volume: 5
  blowout_flowRate: 1000
  blowout_location: source_well
  dropTip_location: trashBin
  preWetTip: true
labwareDefinitions:
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  custom_beta/smrlabs_24_wellplate_20ul/1:
    brand: {brand: SMRLabs, brandId: []}
    metadata: {displayName: SMRLabs 24 Well Plate 20 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.8, yDimension: 85.4, zDimension: 1.5}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: smrlabs_24_wellplate_20ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 0.4, totalLiquidVolume: 20, shape: circular, diameter: 5.58, x: 16.31, y: 65.59, z: 1.1}
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commands:
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