opentrons/protocol-designer 8.3.0
schemaVersion: 8
protocolName: MWNCT_24wells
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p50_single: {mount: right}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 300 µL (1): {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 4}
  Opentrons 6 Tube Rack with Falcon 50 mL Conical: {loadName: opentrons_6_tuberack_falcon_50ml_conical, namespace: opentrons, version: 1, location: 5}
  SMRLabs 24 Well Plate 20 µL: {loadName: smrlabs_24_wellplate_20ul, namespace: custom_beta, version: 1, location: 6}
pipetteTiprackAssignments:
  p50_single: [opentrons/opentrons_96_tiprack_300ul/1]
ingredients:
  - MWCNT_Solution
ingredLocations:
  Opentrons 6 Tube Rack with Falcon 50 mL Conical:
    MWCNT_Solution {volume: 40000}: A3
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 14
  path: single
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A3
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 75
  aspirate_delay_seconds: 1
  aspirate_flowRate: 25
  aspirate_mmFromBottom: 75
  aspirate_touchTip_checkbox: true
  dispense_labware: SMRLabs 24 Well Plate 20 µL
  dispense_wells: A1-A6
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 10
  path: single
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A3
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 75
  aspirate_delay_seconds: 1
  aspirate_flowRate: 25
  aspirate_mmFromBottom: 75
  aspirate_touchTip_checkbox: true
  dispense_labware: SMRLabs 24 Well Plate 20 µL
  dispense_wells: B1-B6
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 8
  path: single
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A3
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 75
  aspirate_delay_seconds: 1
  aspirate_flowRate: 25
  aspirate_mmFromBottom: 75
  aspirate_touchTip_checkbox: true
  dispense_labware: SMRLabs 24 Well Plate 20 µL
  dispense_wells: C1-C6
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A3
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 75
  aspirate_delay_seconds: 1
  aspirate_flowRate: 25
  aspirate_mmFromBottom: 75
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 111
  dispense_labware: SMRLabs 24 Well Plate 20 µL
  dispense_wells: D1-D6
  dispense_flowRate: 50
  dropTip_location: trashBin
  preWetTip: true
labwareDefinitions:
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  custom_beta/smrlabs_24_wellplate_20ul/1:
    brand: {brand: SMRLabs, brandId: []}
    metadata: {displayName: SMRLabs 24 Well Plate 20 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.8, yDimension: 85.4, zDimension: 1.5}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: smrlabs_24_wellplate_20ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 0.4, totalLiquidVolume: 20, shape: circular, diameter: 5.58, x: 16.31, y: 65.59, z: 1.1}
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commands:
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- pickUpTip: {pipetteId: p50_single, labwareId: Opentrons OT-2 96 Tip Rack 300 µL (1), wellName: A1}
- aspirate: {pipetteId: p50_single, volume: 14, labwareId: Opentrons 6 Tube Rack with Falcon 50 mL Conical, wellName: A3, wellLocation: {origin: bottom, offset: {z: 75, x: 0, y: 0}}, flowRate: 25}
- waitForDuration: {seconds: 1}
- dispense: {pipetteId: p50_single, volume: 14, labwareId: Opentrons 6 Tube Rack with Falcon 50 mL Conical, wellName: A3, wellLocation: {origin: bottom, offset: {z: 75, x: 0, y: 0}}, flowRate: 50}
- aspirate: {pipetteId: p50_single, volume: 14, labwareId: Opentrons 6 Tube Rack with Falcon 50 mL Conical, wellName: A3, wellLocation: {origin: bottom, offset: {z: 75, x: 0, y: 0}}, flowRate: 25}
- moveToWell: {pipetteId: p50_single, labwareId: Opentrons 6 Tube Rack with Falcon 50 mL Conical, wellName: A3, wellLocation: {origin: bottom, offset: {x: 0, y: 0, z: 75}}}
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